<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns:zg="clr-namespace:Bonsai.Gui.ZedGraph;assembly=Bonsai.Gui.ZedGraph"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Speed_Threshold" />
        <Property Name="Inter_Trial_Interval" />
        <Property Name="Reward_Duration" />
        <Property Name="T_Speed_Maintain_Min" />
        <Property Name="T_Speed_Mean_Added" />
        <Property Name="Distance_To_Travel" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Behaviour_Parameters</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="T_Speed_Maintain_Min" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>2.8</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>T_Speed_Maintain_Min</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="T_Speed_Mean_Added" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.3</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>T_Speed_Mean_Added</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Speed_Threshold" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Speed_Threshold</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Inter_Trial_Interval" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Inter_Trial_Interval</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Reward_Duration" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Reward_Duration</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Distance_To_Travel" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>20</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Distance_To_Travel</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Arduino_COM_Port" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Serial_Commnication</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Arduino_COM_Port" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>COM9</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="PortName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:SerialReadLine">
                <port:PortName>COM9</port:PortName>
                <port:NewLine>\n</port:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>Check_Valid</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it != null
&amp;&amp; it.Length == 11
&amp;&amp; it[0] == 'I'
&amp;&amp; it[1] == ','
&amp;&amp; char.IsDigit(it[2])
&amp;&amp; char.IsDigit(it[3])
&amp;&amp; char.IsDigit(it[4])
&amp;&amp; char.IsDigit(it[5])
&amp;&amp; it[6] == ','
&amp;&amp; char.IsDigit(it[7])
&amp;&amp; char.IsDigit(it[8])
&amp;&amp; char.IsDigit(it[9])
&amp;&amp; char.IsDigit(it[10])</scr:Expression>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Parse">
              <Pattern>I,%i,%i</Pattern>
              <Separator />
            </Expression>
            <Expression xsi:type="rx:Publish">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.Item1</scr:Expression>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>(it - 478.0) * 0.38314</scr:Expression>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Speed</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.Item2</scr:Expression>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Lick_Trace</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>P</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Reward_Valve_Status</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.Item1 + "," + (Item2 &gt; 0.5 ? "1" : "0") + "00000"</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="PortName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:SerialWriteLine">
                <port:PortName>COM9</port:PortName>
                <port:NewLine>\n</port:NewLine>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="17" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="6" To="10" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="14" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="18" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>GUI_Window</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Trial_Number</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>"trial: " + it.ToString()</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Text" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:LabelBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>trial: 96</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Speed</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Speed_Threshold</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="zg:RollingGraphBuilder">
              <zg:ValueSelector>Item1,Item2</zg:ValueSelector>
              <zg:SymbolType>None</zg:SymbolType>
              <zg:LineWidth>1</zg:LineWidth>
              <zg:CurveSettings>
                <zg:CurveConfiguration>
                  <zg:Label>sdf</zg:Label>
                  <zg:Color>#FFC080</zg:Color>
                </zg:CurveConfiguration>
              </zg:CurveSettings>
              <zg:Capacity>1000</zg:Capacity>
              <zg:Min>-10</zg:Min>
              <zg:Max>100</zg:Max>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Lick_Trace</Name>
            </Expression>
            <Expression xsi:type="zg:RollingGraphBuilder">
              <zg:SymbolType>None</zg:SymbolType>
              <zg:LineWidth>1</zg:LineWidth>
              <zg:CurveSettings />
              <zg:Capacity>1000</zg:Capacity>
              <zg:Min>0</zg:Min>
              <zg:Max>1200</zg:Max>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Trial_Running_Duration</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="scr:ExpressionTransform">
                <scr:Expression>it.GetType().ToString()</scr:Expression>
              </Builder>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>"running duration: " + it.ToString("F2") + " s"</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Text" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:LabelBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>running duration: 2.99 s</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Current_State</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>"Current State: " + it</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Text" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:LabelBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>Current State: monitoring_speed</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Name>Table Layout</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>3</gui:ColumnCount>
              <gui:RowCount>5</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles />
              <gui:CellSpans>
                <gui:CellSpan ColumnSpan="1" RowSpan="1" />
                <gui:CellSpan ColumnSpan="1" RowSpan="5" />
                <gui:CellSpan ColumnSpan="1" RowSpan="5" />
                <gui:CellSpan ColumnSpan="1" RowSpan="1" />
              </gui:CellSpans>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="24" Label="Source1" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="24" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="24" Label="Source3" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="24" Label="Source4" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source5" />
            <Edge From="24" To="25" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Internal_Variables</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Speed</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Lick_Trace</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Monitor_Speed</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>10000000</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Second_Scale_Factor</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Eligible_Speed</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Stimulus_Opacity</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>initialising_hardware</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Current_State</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Reward_Valve_Status</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Trial_Number</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>FSM_events</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>trial_ready</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Equal" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="MulticastSubject">
              <Name>Trial_Number</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Trial_Running_Duration</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>P45D</rx:DueTime>
                <rx:Period>P365D</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>FSM_events</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp.TimeOfDay.Ticks</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Seed" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed>-1150506752</num:Seed>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Random_Process</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Speed_Monitoring</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Speed</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Speed_Threshold</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="GreaterThanOrEqual" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Monitor_Speed</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.Item1 &amp;&amp; it.Item2</scr:Expression>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Eligible_Speed</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Current_State</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>monitoring_speed</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Equal" />
            <Expression xsi:type="MulticastSubject">
              <Name>Monitor_Speed</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="11" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>FSM_Logging</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>FSM_events</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Current_State</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.Timestamp.ToString("O") + "," + it.Value.Item2 + "," + it.Value.Item1</scr:Expression>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>FSM_Log_Filename</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>timestamp,current_state,event</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>FSM_Log_Filename</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>C:\Bonsai_Data\fsm_log_2026-03-19_12-36-51.csv</io:FileName>
              <io:Append>true</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>"C:\\Bonsai_Data\\fsm_log_" + it.Timestamp.ToString("yyyy-MM-dd_HH-mm-ss") + ".csv"</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>FSM_Log_Filename</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="8" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="11" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Stimulus_Presentation</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>3825</gl:Width>
                <gl:Height>1080</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>Gray</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location>
                  <gl:X>-3840</gl:X>
                  <gl:Y>0</gl:Y>
                </gl:Location>
                <gl:WindowBorder>Hidden</gl:WindowBorder>
                <gl:WindowState>Normal</gl:WindowState>
                <gl:DisplayDevice>Primary</gl:DisplayDevice>
                <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
            <Expression xsi:type="rx:PublishSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Speed</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.03</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Multiply" />
            <Expression xsi:type="rx:Scan">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it.Accumulation + it.Value</scr:Expression>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it &gt; 180.0f
? it - 360.0f
: (it &lt; -180.0f
   ? it + 360.0f
   : it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>-it</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Phase" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Stimulus_Opacity</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Opacity" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
              <LocationX>-2.5</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <ExtentX>5</ExtentX>
              <ExtentY>2</ExtentY>
              <SpatialFrequency>4</SpatialFrequency>
              <TemporalFrequency>0</TemporalFrequency>
              <Phase>7290.521</Phase>
              <Angle>-45</Angle>
              <SquareWave>false</SquareWave>
              <Contrast>1</Contrast>
              <DutyCycle xsi:nil="true" />
              <Radius>4</Radius>
              <Aperture>0</Aperture>
              <Opacity>0</Opacity>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Phase" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Opacity" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
              <LocationX>2.5</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <ExtentX>5</ExtentX>
              <ExtentY>2</ExtentY>
              <SpatialFrequency>4</SpatialFrequency>
              <TemporalFrequency>0</TemporalFrequency>
              <Phase>-7290.521</Phase>
              <Angle>45</Angle>
              <SquareWave>false</SquareWave>
              <Contrast>1</Contrast>
              <DutyCycle xsi:nil="true" />
              <Radius>4</Radius>
              <Aperture>0</Aperture>
              <Opacity>0</Opacity>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="17" Label="Source1" />
            <Edge From="7" To="20" Label="Source1" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="12" To="18" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="17" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="15" To="19" Label="Source1" />
            <Edge From="16" To="17" Label="Source3" />
            <Edge From="18" To="20" Label="Source2" />
            <Edge From="19" To="20" Label="Source3" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>FSM_events</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>initialising_hardware</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:Scan">
        <Name>State_Reducer</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>Get State and Event</scr:Name>
              <scr:Expression>new(
  it.Accumulation as State,
  it.Value as Event
)</scr:Expression>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>State_Reducer</scr:Name>
              <scr:Expression>it.State == "initialising_hardware" &amp;&amp; it.Event == "hardware_ready" ? "setting_trial_details" :
it.State == "setting_trial_details" &amp;&amp; it.Event == "trial_ready" ? "monitoring_speed" :
it.State == "monitoring_speed" &amp;&amp; it.Event == "running_criterion_met" ? "presenting_stimuli" :
it.State == "presenting_stimuli" &amp;&amp; it.Event == "distance_travelled" ? "dispensing_reward" :
it.State == "dispensing_reward" &amp;&amp; it.Event == "reward_dispensed" ? "inter_trial_interval" :
it.State == "inter_trial_interval" &amp;&amp; it.Event == "iti_elapsed" ? "setting_trial_details" :
it.State</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>State = Initialise_Hardware</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>initialising_hardware</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Equal" />
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Initialize_Hardware</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT2S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>hardware_ready</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>State = setting_trial_details</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>setting_trial_details</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Equal" />
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Setup_Trial</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Random_Process</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>T_Speed_Mean_Added</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Divide" />
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Rate" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateExponential">
                <p1:Rate>3.3333332538604736</p1:Rate>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Sample" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>T_Speed_Maintain_Min</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Trial_Running_Duration</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.2S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="6" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>trial_ready</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>State = monitoring_speed</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>monitoring_speed</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Equal" />
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Running_Timer</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Eligible_Speed</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Scan">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it.Value ? it.Accumulation + 1 : 0</scr:Expression>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>Duration &gt; T_Speed_Maintain</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>0.02</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Multiply" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Trial_Running_Duration</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="GreaterThanOrEqual" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="5" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.2S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>running_criterion_met</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>State = Presenting_Stimuli</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>presenting_stimuli</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Equal" />
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Present_Visual_Stimuli</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Speed</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Stimulus_Opacity</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it &gt; 0 ? it * 0.02 : 0.0</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:Scan">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it.Accumulation + it.Value</scr:Expression>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Distance_To_Travel</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="GreaterThanOrEqual" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Stimulus_Opacity</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>distance_travelled</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>State = dispensing_reward</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>dispensing_reward</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Equal" />
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Dispense_Reward</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Reward_Valve_Status</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Second_Scale_Factor</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Reward_Duration</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Multiply" />
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Reward_Valve_Status</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="8" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>reward_dispensed</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>State = inter_trial_interval</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>inter_trial_interval</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Equal" />
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>inter_trial_interval</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Second_Scale_Factor</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Inter_Trial_Interval</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Multiply" />
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.02S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="6" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>iti_elapsed</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>FSM_events</Name>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Current_State</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="9" To="13" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="15" To="19" Label="Source1" />
      <Edge From="15" To="22" Label="Source1" />
      <Edge From="15" To="25" Label="Source1" />
      <Edge From="15" To="28" Label="Source1" />
      <Edge From="15" To="31" Label="Source1" />
      <Edge From="15" To="36" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="34" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="34" Label="Source2" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="34" Label="Source3" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="34" Label="Source4" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="34" Label="Source5" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source6" />
      <Edge From="34" To="35" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>