WorkflowBuilder(Version=2.9.0)
ExternalizedMapping
  Speed_Threshold(Category=Running)
  Inter_Trial_Interval
  Reward_Duration(Category=Reward)
  T_Speed_Maintain_Min(Category=Running)
  T_Speed_Mean_Added(Category=Running)
  "Go Trial Proabability"(Category=Trial_Probabilities)
  "Delay Trial Proabability"(Category=Trial_Probabilities)
  Lick_Threshold
  T_Reward_Availdable(Category=Reward)
  Delay_Min(Category="Delay Time")
  Delay_Max(Category="Delay Time")
  Delay_Added(Category="Delay Time")
  Punish_Time
  "Stop Trial Proabability"(Category=Trial_Probabilities)
  Auto_Reward(Category=Reward)
-> GroupWorkflow Behaviour_Parameters
    ExternalizedMapping(Value(DisplayName=T_Speed_Maintain_Min))
    -> FloatProperty(Value=1.5)
    -> BehaviorSubject T_Speed_Maintain_Min

    ExternalizedMapping(Value(DisplayName=T_Speed_Mean_Added))
    -> FloatProperty(Value=0.3)
    -> BehaviorSubject T_Speed_Mean_Added

    ExternalizedMapping(Value(DisplayName=Speed_Threshold))
    -> FloatProperty(Value=-5)
    -> BehaviorSubject Speed_Threshold

    ExternalizedMapping(Value(DisplayName=T_Reward_Availdable))
    -> FloatProperty(Value=1)
    -> BehaviorSubject T_Reward_Availdable

    ExternalizedMapping(Value(DisplayName="Go Trial Proabability"))
    -> FloatProperty(Value=1)
    -> BehaviorSubject Go_Probability

    ExternalizedMapping(Value(DisplayName="Delay Trial Proabability"))
    -> FloatProperty(Value=0)
    -> BehaviorSubject Delay_Probability

    ExternalizedMapping(Value(DisplayName="Stop Trial Proabability"))
    -> FloatProperty(Value=0)
    -> BehaviorSubject Stop_Probability

    ExternalizedMapping(Value(DisplayName=Inter_Trial_Interval))
    -> FloatProperty(Value=1)
    -> BehaviorSubject Inter_Trial_Interval

    ExternalizedMapping(Value(DisplayName=Reward_Duration))
    -> IntProperty(Value=1000)
    -> BehaviorSubject Reward_Duration

    ExternalizedMapping(Value(DisplayName=Auto_Reward))
    -> BooleanProperty(Value=true)
    -> BehaviorSubject Auto_Reward

    ExternalizedMapping(Value(DisplayName=Lick_Threshold))
    -> IntProperty(Value=500)
    -> BehaviorSubject Lick_Threshold

    ExternalizedMapping(Value(DisplayName=Delay_Min))
    -> FloatProperty(Value=0.5)
    -> BehaviorSubject Delay_Min

    ExternalizedMapping(Value(DisplayName=Delay_Max))
    -> FloatProperty(Value=2)
    -> BehaviorSubject Delay_Max

    ExternalizedMapping(Value(DisplayName=Delay_Added))
    -> FloatProperty(Value=0.5)
    -> BehaviorSubject Delay_mean_added

    ExternalizedMapping(Value(DisplayName=Punish_Time))
    -> FloatProperty(Value=6)
    -> BehaviorSubject Punish_Time

ExternalizedMapping(Arduino_COM_Port)
-> GroupWorkflow Serial_Commnication
    ExternalizedMapping(Value(DisplayName=Arduino_COM_Port))
    -> StringProperty(Value=COM9) => #1
    -> PropertyMapping(PortName)
    -> Bonsai.IO.Ports.SerialReadLine(PortName=COM9, NewLine=\n)
    -> Condition Check_Valid
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            it != null
            && it.Length == 11
            && it[0] == 'I'
            && it[1] == ','
            && char.IsDigit(it[2])
            && char.IsDigit(it[3])
            && char.IsDigit(it[4])
            && char.IsDigit(it[5])
            && it[6] == ','
            && char.IsDigit(it[7])
            && char.IsDigit(it[8])
            && char.IsDigit(it[9])
            && char.IsDigit(it[10])
        -> WorkflowOutput
    -> Parse(Pattern="I,%i,%i", Separator="")
    -> Publish => #6
        WorkflowInput Source1
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item1
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: (it - 478.0) * 0.38314
    -> MulticastSubject Speed
    #6 -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item2
    -> MulticastSubject Lick_Trace
    SubscribeSubject Trial_Start_Value => #12
    SubscribeSubject Static_Onset_Value => #13
    SubscribeSubject Drift_Onset_Value => #14
    SubscribeSubject Trial_End_Value => #15
    SubscribeSubject Stop_Tone_Value => #16
    SubscribeSubject Reward_Duration
    -> Bonsai.Scripting.Expressions.ExpressionTransform Reward_Duration_Padding => #18
      Expression: Math.Min(Math.Max(it, 0), 9999).ToString("D4")
    SubscribeSubject Reward_Valve_Status => #19
    #12, #13, #14, #15, #16, #18, #19 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        "H,"
        + (Item1 > 0.5 ? "1" : "0")
        + (Item2 > 0.5 ? "1" : "0")
        + (Item3 > 0.5 ? "1" : "0")
        + (Item4 > 0.5 ? "1" : "0")
        + (Item5 > 0.5 ? "1" : "0")
        + ","
        + Item6
        + ","
        + (Item7 > 0.5 ? "1" : "0")
    -> DistinctUntilChanged => #22
    #1 -> PropertyMapping(PortName) => #23
    #22, #23 -> Bonsai.IO.Ports.SerialWriteLine(PortName=COM9, NewLine=\n)

GroupWorkflow AI_Recorder_Pulses
    SubscribeSubject Trial_Start_Pulse
    -> IntProperty(Value=1)
    -> MulticastSubject Trial_Start_Value
    -> Delay(DueTime=PT1S)
    -> IntProperty(Value=0)
    -> MulticastSubject Trial_Start_Value

    SubscribeSubject Static_Onset_Pulse
    -> IntProperty(Value=1)
    -> MulticastSubject Static_Onset_Value
    -> Delay(DueTime=PT1S)
    -> IntProperty(Value=0)
    -> MulticastSubject Static_Onset_Value

    SubscribeSubject Drift_Onset_Pulse
    -> IntProperty(Value=1)
    -> MulticastSubject Drift_Onset_Value
    -> Delay(DueTime=PT1S)
    -> IntProperty(Value=0)
    -> MulticastSubject Drift_Onset_Value

    SubscribeSubject Trial_End_Pulse
    -> IntProperty(Value=1)
    -> MulticastSubject Trial_End_Value
    -> Delay(DueTime=PT1S)
    -> IntProperty(Value=0)
    -> MulticastSubject Trial_End_Value

    SubscribeSubject Stop_Signal_Pulse
    -> IntProperty(Value=1)
    -> MulticastSubject Stop_Tone_Value
    -> Delay(DueTime=PT0.5S)
    -> IntProperty(Value=0)
    -> MulticastSubject Stop_Tone_Value

GroupWorkflow GUI_Window
    SubscribeSubject Trial_Number
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: "Trial Number: " + it.ToString()
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="Trial Number: 2")
    -> VisualizerMapping => #4
    SubscribeSubject Speed => #5
    SubscribeSubject Speed_Threshold => #6
    #5, #6 -> CombineLatest
    -> Bonsai.Gui.ZedGraph.RollingGraphBuilder
      IndexSelector=""
      ValueSelector="Item1,Item2"
      SymbolType=None
      LineWidth=1
      CurveSettings(CurveConfiguration(Label=Speed, Color=#8080FF), CurveConfiguration(Label=Threshold, Color=#FF8000))
      Capacity=1000
      Min=-10
      Max=100
    -> VisualizerMapping => #9
    SubscribeSubject Lick_Trace => #10
    SubscribeSubject Lick_Threshold => #11
    #10, #11 -> CombineLatest
    -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(SymbolType=None, LineWidth=1, CurveSettings="", Capacity=1000, Min=0, Max=1200)
    -> VisualizerMapping => #14
    SubscribeSubject Trial_Type
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        "Trial Type: " +
        (it == 0 ? "Go":
        (it == 1 ? "Delay":
        (it == 2 ? "Stop":
        "unknown")))
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="Trial Type: Go")
    -> VisualizerMapping => #19
    SubscribeSubject Trial_Running_Duration
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: "Running Duration: " + it.ToString("F2") + " s"
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="Running Duration: 1.97 s")
    -> VisualizerMapping => #24
    SubscribeSubject Trial_Delay_Duration
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: "Trial Delay Duration: " + it.ToString("F2") + " s"
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="Trial Delay Duration: 2.17 s")
    -> VisualizerMapping => #29
    SubscribeSubject Trial_Stop_Duration
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: "Trial Stop Duration: " + it.ToString("F2") + " s"
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="Trial Stop Duration: 1.17 s")
    -> VisualizerMapping => #34
    SubscribeSubject Current_State
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: "Current State: " + it
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="Current State: inter_trial_interval")
    -> VisualizerMapping => #39
    #4, #9, #14, #19, #24, #29, #34, #39 -> Bonsai.Gui.TableLayoutPanelBuilder "Table Layout"
      Enabled=true
      Visible=true
      ColumnCount=3
      RowCount=5
      ColumnStyles=""
      RowStyles=""
      CellSpans(CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=6), CellSpan(ColumnSpan=1, RowSpan=6), CellSpan(ColumnSpan=1, RowSpan=1))
    -> WorkflowOutput

GroupWorkflow Internal_Variables
    IntProperty(Value=0)
    -> BehaviorSubject Speed

    IntProperty(Value=0)
    -> BehaviorSubject Lick_Trace

    BooleanProperty(Value=false)
    -> BehaviorSubject Monitor_Speed

    IntProperty(Value=10000000)
    -> BehaviorSubject Second_Scale_Factor

    IntProperty(Value=0)
    -> BehaviorSubject Trial_Type

    BooleanProperty(Value=false)
    -> BehaviorSubject Eligible_Speed

    FloatProperty(Value=0)
    -> BehaviorSubject Stimulus_Opacity

    FloatProperty(Value=0)
    -> BehaviorSubject Stimulus_Speed

    StringProperty(Value=initialising_hardware)
    -> BehaviorSubject Current_State

    IntProperty(Value=0)
    -> BehaviorSubject Reward_Valve_Status

    IntProperty(Value=0)
    -> BehaviorSubject Trial_Number

    SubscribeSubject FSM_events
    -> Condition
        StringProperty(Value=trial_ready) => #0
        WorkflowInput Source1 => #1
        #0, #1 -> CombineLatest
        -> Equal
        -> WorkflowOutput
    -> IntProperty(Value=1)
    -> Accumulate
    -> MulticastSubject Trial_Number

    FloatProperty(Value=0)
    -> BehaviorSubject Trial_Running_Duration

    FloatProperty(Value=0)
    -> BehaviorSubject Trial_Delay_Duration

    FloatProperty(Value=0)
    -> BehaviorSubject Trial_Stop_Duration

    SubscribeSubject Random_Process => #33
    FloatProperty(Value=0)
    -> PropertyMapping(Lower) => #35
    FloatProperty(Value=1)
    -> PropertyMapping(Upper) => #37
    #33, #35, #37 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
    -> BehaviorSubject Uniform_Distribution_0_1

    Timer(DueTime=P45D, Period=P365D)
    -> StringProperty
    -> Skip(Count=1)
    -> PublishSubject FSM_events

    BooleanProperty(Value=false)
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.Ticks)
    -> PropertyMapping(Seed)
    -> Bonsai.Numerics.CreateRandom(Seed=-1738543360)
    -> BehaviorSubject Random_Process

    IntProperty(Value=0)
    -> Skip(Count=1)
    -> BehaviorSubject Trial_Start_Pulse

    IntProperty(Value=0)
    -> Skip(Count=1)
    -> BehaviorSubject Static_Onset_Pulse

    IntProperty(Value=0)
    -> Skip(Count=1)
    -> BehaviorSubject Drift_Onset_Pulse

    IntProperty(Value=0)
    -> Skip(Count=1)
    -> BehaviorSubject Trial_End_Pulse

    IntProperty(Value=0)
    -> Skip(Count=1)
    -> BehaviorSubject Stop_Signal_Pulse

    IntProperty(Value=0)
    -> BehaviorSubject Trial_Start_Value

    IntProperty(Value=0)
    -> BehaviorSubject Static_Onset_Value

    IntProperty(Value=0)
    -> BehaviorSubject Drift_Onset_Value

    IntProperty(Value=0)
    -> BehaviorSubject Trial_End_Value

    IntProperty(Value=0)
    -> BehaviorSubject Stop_Tone_Value

GroupWorkflow Speed_Monitoring
    SubscribeSubject Speed => #0
    SubscribeSubject Speed_Threshold => #1
    #0, #1 -> CombineLatest
    -> GreaterThanOrEqual => #3
    SubscribeSubject Monitor_Speed => #4
    #3, #4 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item1 && it.Item2
    -> MulticastSubject Eligible_Speed

    SubscribeSubject Current_State
    -> DistinctUntilChanged => #9
    StringProperty(Value=monitoring_speed) => #10
    #9, #10 -> CombineLatest
    -> Equal
    -> MulticastSubject Monitor_Speed

GroupWorkflow FSM_Logging
    SubscribeSubject FSM_events => #0
    SubscribeSubject Current_State => #1
    #0, #1 -> WithLatestFrom
    -> Timestamp
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
      Expression: it.Timestamp.ToString("O") + "," + it.Value.Item2 + "," + it.Value.Item1
    SubscribeSubject FSM_Log_Filename
    -> Delay(DueTime=PT0.1S)
    -> StringProperty(Value="timestamp,current_state,event") => #7
    #4, #7 -> Merge => #8
    SubscribeSubject FSM_Log_Filename
    -> PropertyMapping(FileName) => #10
    #8, #10 -> Bonsai.IO.CsvWriter(FileName=C:\Bonsai_Data\fsm_log_2026-05-17_16-46-25.csv, Append=true, Overwrite=false, Suffix=None, IncludeHeader=false)

    Timer(DueTime=PT0S)
    -> Take(Count=1)
    -> Timestamp
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: "C:\\Bonsai_Data\\fsm_log_" + it.Timestamp.ToString("yyyy-MM-dd_HH-mm-ss") + ".csv"
    -> BehaviorSubject FSM_Log_Filename

GroupWorkflow Stimulus_Presentation
    Bonsai.Shaders.CreateWindow
      Width=3825
      Height=1080
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location(X=-3840, Y=0)
      WindowBorder=Hidden
      WindowState=Normal
      DisplayDevice=Primary
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Resources.LoadResources
    -> WorkflowOutput

    Bonsai.Shaders.RenderFrame
    -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
    -> PublishSubject Draw

    SubscribeSubject Draw => #7
    SubscribeSubject Stimulus_Opacity => #8
    -> PropertyMapping(Opacity) => #9
    SubscribeSubject Stimulus_Speed => #10
    -> PropertyMapping(TemporalFrequency) => #11
    #7, #9, #11 -> IncludeWorkflow
      Path=BonVision:Primitives.DrawGratings.bonsai
      LocationX=-2.5
      LocationY=0
      Layer=0
      ExtentX=5
      ExtentY=2
      SpatialFrequency=4
      TemporalFrequency=0
      Phase=6.87549353
      Angle=-45
      SquareWave=false
      Contrast=1
      DutyCycle=nil
      Radius=4
      Aperture=0
      Opacity=0
    #8 -> PropertyMapping(Opacity) => #13
    #10 -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: -it
    -> PropertyMapping(TemporalFrequency) => #15
    #7, #13, #15 -> IncludeWorkflow
      Path=BonVision:Primitives.DrawGratings.bonsai
      LocationX=2.5
      LocationY=0
      Layer=0
      ExtentX=5
      ExtentY=2
      SpatialFrequency=4
      TemporalFrequency=-0
      Phase=-6.87549353
      Angle=45
      SquareWave=false
      Contrast=1
      DutyCycle=nil
      Radius=4
      Aperture=0
      Opacity=0
    #8 -> PropertyMapping(ColorR, ColorG, ColorB) => #17
    #7, #17 -> IncludeWorkflow
      Path=BonVision:Primitives.DrawQuad.bonsai
      ExtentX=0.2
      ExtentY=0.2
      LocationX=-3.4
      LocationY=0.68
      Layer=1
      Angle=0
      ColorR=0
      ColorG=0
      ColorB=0
      ColorA=1

SubscribeSubject FSM_events => #10
Timer(DueTime=PT0S)
-> Take(Count=1)
-> StringProperty(Value=initialising_hardware) => #13
#10, #13 -> Merge
-> Scan State_Reducer
    WorkflowInput Source1
    -> Bonsai.Scripting.Expressions.ExpressionTransform "Get State and Event"
      Expression:
        new(
          it.Accumulation as State,
          it.Value as Event
        )
    -> Bonsai.Scripting.Expressions.ExpressionTransform State_Reducer
      Expression:
        it.State == "initialising_hardware" && it.Event == "hardware_ready" ? "setting_trial_details" :

        it.State == "setting_trial_details" && it.Event == "trial_ready" ? "monitoring_speed" :
        it.State == "monitoring_speed" && it.Event == "running_criterion_met" ? "selecting_trial" :

        it.State == "selecting_trial" && it.Event == "delay_selected" ? "presenting_static_grating" :
        it.State == "selecting_trial" && it.Event == "go_selected" ? "presenting_drifting_grating" :
        it.State == "selecting_trial" && it.Event == "stop_selected" ? "stop_trial" :


        it.State == "presenting_static_grating" && it.Event == "lick" ? "timeout" :
        it.State == "presenting_static_grating" && it.Event == "delay_time_elapsed" ? "presenting_drifting_grating" :

        it.State == "presenting_drifting_grating" && it.Event == "lick" ? "dispensing_reward" :
        it.State == "presenting_drifting_grating" && it.Event == "response_time_elapsed" ? "miss" :

        it.State == "miss" && it.Event == "autoreward_on" ? "dispensing_reward" :
        it.State == "miss" && it.Event == "autoreward_off" ? "inter_trial_interval":

        it.State == "stop_trial" && it.Event == "lick" ? "timeout" :
        it.State == "stop_trial" && it.Event == "correct_stop" ? "inter_trial_interval" :

        it.State == "timeout" && it.Event == "punish_time_elapsed" ? "inter_trial_interval" :

        it.State == "dispensing_reward" && it.Event == "reward_dispensed" ? "inter_trial_interval" :
        it.State == "inter_trial_interval" && it.Event == "iti_elapsed" ? "setting_trial_details" :

        it.State
    -> WorkflowOutput
-> DistinctUntilChanged => #16
-> GroupWorkflow "State = Initialise_Hardware"
    StringProperty(Value=initialising_hardware) => #0
    WorkflowInput Source1 => #1
    #0, #1 -> CombineLatest
    -> Equal
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> WorkflowOutput
-> SelectMany Initialize_Hardware => #18
    WorkflowInput Source1
    -> Delay(DueTime=PT2S)
    -> StringProperty(Value=hardware_ready)
    -> Take(Count=1)
    -> WorkflowOutput
#16 -> GroupWorkflow "State = setting_trial_details"
    StringProperty(Value=setting_trial_details) => #0
    WorkflowInput Source1 => #1
    #0, #1 -> CombineLatest
    -> Equal
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> WorkflowOutput
-> SelectMany Setup_Trial => #20
    SubscribeSubject Random_Process => #0
    FloatProperty(Value=1) => #1
    SubscribeSubject T_Speed_Mean_Added => #2
    #1, #2 -> CombineLatest
    -> Divide
    -> PropertyMapping(Rate) => #5
    #0, #5 -> Bonsai.Numerics.Distributions.CreateExponential(Rate=3.3333332538604736)
    -> Bonsai.Numerics.Distributions.Sample => #7
    SubscribeSubject T_Speed_Maintain_Min => #8
    #7, #8 -> Zip
    -> Add
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it > 4.5 ? 4.5 : it
    -> Take(Count=1)
    -> MulticastSubject Trial_Running_Duration => #13
    SubscribeSubject Go_Probability => #14
    SubscribeSubject Delay_Probability => #15
    SubscribeSubject Stop_Probability => #16
    #14, #15, #16 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new double[] { it.Item1, it.Item2, it.Item3 }
    -> PropertyMapping(ProbabilityMass) => #19
    SubscribeSubject Random_Process => #20
    #19, #20 -> Bonsai.Numerics.Distributions.CreateCategorical(ProbabilityMass(double=1, double=0, double=0))
    -> Bonsai.Numerics.Distributions.Sample
    -> MulticastSubject Trial_Type => #23
    SubscribeSubject Random_Process => #24
    SubscribeSubject Delay_Min
    -> PropertyMapping(Lower) => #26
    SubscribeSubject Delay_Max
    -> PropertyMapping(Upper) => #28
    #24, #26, #28 -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0.5, Upper=2)
    -> Bonsai.Numerics.Distributions.Sample => #30
    FloatProperty(Value=1) => #31
    SubscribeSubject Delay_mean_added => #32
    #31, #32 -> CombineLatest
    -> Divide
    -> PropertyMapping(Rate)
    -> Bonsai.Numerics.Distributions.CreateExponential(Rate=2)
    -> Bonsai.Numerics.Distributions.Sample => #37
    #30, #37 -> Zip
    -> Add
    -> Take(Count=1)
    -> MulticastSubject Trial_Delay_Duration => #41
    SubscribeSubject Delay_Min => #42
    SubscribeSubject Uniform_Distribution_0_1
    -> Bonsai.Numerics.Distributions.Sample => #44
    #41, #42, #44 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item2 + it.Item3 * (it.Item1 - it.Item2)
    -> MulticastSubject Trial_Stop_Duration => #47
    #13, #23, #41, #47 -> Zip
    -> StringProperty(Value=trial_ready)
    -> Delay(DueTime=PT0.2S)
    -> Take(Count=1)
    -> WorkflowOutput

    WorkflowInput Source1
    -> FloatProperty(Value=0)
    -> MulticastSubject Stimulus_Opacity
    -> FloatProperty(Value=0)
    -> MulticastSubject Stimulus_Speed
#16 -> GroupWorkflow "State = monitoring_speed"
    StringProperty(Value=monitoring_speed) => #0
    WorkflowInput Source1 => #1
    #0, #1 -> CombineLatest
    -> Equal
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> WorkflowOutput
-> SelectMany Running_Timer => #22
    SubscribeSubject Eligible_Speed => #0
    WorkflowInput Source1
    -> IntProperty(Value=0) => #2
    #0, #2 -> Scan
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Value ? it.Accumulation + 1 : 0
        -> WorkflowOutput
    -> Condition "Duration > T_Speed_Maintain"
        FloatProperty(Value=0.02) => #0
        WorkflowInput Source1 => #1
        #0, #1 -> CombineLatest
        -> Multiply => #3
        SubscribeSubject Trial_Running_Duration => #4
        #3, #4 -> CombineLatest
        -> GreaterThanOrEqual
        -> WorkflowOutput
    -> StringProperty(Value=running_criterion_met)
    -> Delay(DueTime=PT0.2S)
    -> Take(Count=1)
    -> WorkflowOutput
#16 -> GroupWorkflow "State = SelectingTrial"
    StringProperty(Value=selecting_trial) => #0
    WorkflowInput Source1 => #1
    #0, #1 -> CombineLatest
    -> Equal
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> WorkflowOutput
-> SelectMany Selecting_Trial => #24
    SubscribeSubject Trial_Type => #0
    WorkflowInput Source1
    -> IntProperty(Value=0)
    -> MulticastSubject Trial_Start_Pulse => #3
    #0, #3 -> SubscribeWhen => #4
    -> Condition Delay_Trial_Selected
        IntProperty(Value=1) => #0
        WorkflowInput Source1 => #1
        #0, #1 -> CombineLatest
        -> Equal
        -> WorkflowOutput
    -> StringProperty(Value=delay_selected) => #6
    #4 -> Condition Go_Trial_Selected
        IntProperty(Value=0) => #0
        WorkflowInput Source1 => #1
        #0, #1 -> CombineLatest
        -> Equal
        -> WorkflowOutput
    -> StringProperty(Value=go_selected) => #8
    #4 -> Condition Stop_Trial_Selected
        IntProperty(Value=2) => #0
        WorkflowInput Source1 => #1
        #0, #1 -> CombineLatest
        -> Equal
        -> WorkflowOutput
    -> StringProperty(Value=stop_selected) => #10
    #6, #8, #10 -> Merge
    -> Delay(DueTime=PT0.2S)
    -> Take(Count=1)
    -> WorkflowOutput
#16 -> GroupWorkflow "State = Presenting Static Grating"
    StringProperty(Value=presenting_static_grating) => #0
    WorkflowInput Source1 => #1
    #0, #1 -> CombineLatest
    -> Equal
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> WorkflowOutput
-> SelectMany Presenting_Static_Grating => #26
    SubscribeSubject Lick_Trace
    -> Condition
        WorkflowInput Source1 => #0
        SubscribeSubject Lick_Threshold => #1
        #0, #1 -> CombineLatest
        -> GreaterThanOrEqual
        -> WorkflowOutput
    -> StringProperty(Value=lick) => #2
    WorkflowInput Source1 => #3
    -> FloatProperty(Value=0)
    -> MulticastSubject Stimulus_Speed
    -> FloatProperty(Value=1)
    -> MulticastSubject Stimulus_Opacity => #7
    SubscribeSubject Trial_Delay_Duration => #8
    SubscribeSubject Second_Scale_Factor => #9
    #8, #9 -> CombineLatest
    -> Multiply
    -> PropertyMapping(DueTime) => #12
    #7, #12 -> Bonsai.Shaders.Delay(DueTime=PT0.5629515S)
    -> StringProperty(Value=delay_time_elapsed) => #14
    #2, #14 -> Merge
    -> Delay(DueTime=PT0.2S)
    -> Take(Count=1)
    -> WorkflowOutput
    #3 -> IntProperty(Value=0)
    -> MulticastSubject Static_Onset_Pulse
#16 -> GroupWorkflow "State = Presenting Drifting Grating"
    StringProperty(Value=presenting_drifting_grating) => #0
    WorkflowInput Source1 => #1
    #0, #1 -> CombineLatest
    -> Equal
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> WorkflowOutput
-> SelectMany "Presenting Drifting Grating" => #28
    SubscribeSubject Lick_Trace
    -> Condition
        WorkflowInput Source1 => #0
        SubscribeSubject Lick_Threshold => #1
        #0, #1 -> CombineLatest
        -> GreaterThanOrEqual
        -> WorkflowOutput
    -> StringProperty(Value=lick) => #2
    WorkflowInput Source1 => #3
    -> FloatProperty(Value=2)
    -> MulticastSubject Stimulus_Speed
    -> FloatProperty(Value=1)
    -> MulticastSubject Stimulus_Opacity => #7
    SubscribeSubject Second_Scale_Factor => #8
    SubscribeSubject T_Reward_Availdable => #9
    #8, #9 -> CombineLatest
    -> Multiply
    -> PropertyMapping(DueTime) => #12
    #7, #12 -> Bonsai.Shaders.Delay(DueTime=PT1S)
    -> StringProperty(Value=response_time_elapsed) => #14
    #2, #14 -> Merge
    -> Delay(DueTime=PT0.2S)
    -> Take(Count=1)
    -> WorkflowOutput
    #3 -> IntProperty(Value=0)
    -> MulticastSubject Drift_Onset_Pulse
#16 -> GroupWorkflow "State = Miss"
    StringProperty(Value=miss) => #0
    WorkflowInput Source1 => #1
    #0, #1 -> CombineLatest
    -> Equal
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> WorkflowOutput
-> SelectMany Miss => #30
    SubscribeSubject Auto_Reward => #0
    -> Condition Is_True
        WorkflowInput Source1
        -> WorkflowOutput
    -> StringProperty(Value=autoreward_on) => #2
    #0 -> Condition Is_False
        WorkflowInput Source1 => #0
        BooleanProperty(Value=false) => #1
        #0, #1 -> CombineLatest
        -> Equal
        -> WorkflowOutput
    -> StringProperty(Value=autoreward_off) => #4
    #2, #4 -> Merge
    -> Take(Count=1)
    -> WorkflowOutput
#16 -> GroupWorkflow "State = dispensing_reward"
    StringProperty(Value=dispensing_reward) => #0
    WorkflowInput Source1 => #1
    #0, #1 -> CombineLatest
    -> Equal
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> WorkflowOutput
-> SelectMany Dispense_Reward => #32
    WorkflowInput Source1
    -> IntProperty(Value=1)
    -> MulticastSubject Reward_Valve_Status
    -> Delay(DueTime=PT0.2S)
    -> IntProperty(Value=0)
    -> MulticastSubject Reward_Valve_Status
    -> FloatProperty(Value=0)
    -> MulticastSubject Stimulus_Opacity
    -> FloatProperty(Value=0)
    -> MulticastSubject Stimulus_Speed
    -> StringProperty(Value=reward_dispensed)
    -> Take(Count=1)
    -> WorkflowOutput
#16 -> GroupWorkflow "State = Timeout"
    StringProperty(Value=timeout) => #0
    WorkflowInput Source1 => #1
    #0, #1 -> CombineLatest
    -> Equal
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> WorkflowOutput
-> SelectMany Timeout => #34
    WorkflowInput Source1
    -> FloatProperty(Value=-2)
    -> MulticastSubject Stimulus_Speed
    -> FloatProperty(Value=1)
    -> MulticastSubject Stimulus_Opacity => #4
    SubscribeSubject Second_Scale_Factor => #5
    SubscribeSubject Punish_Time => #6
    #5, #6 -> CombineLatest
    -> Multiply
    -> PropertyMapping(DueTime) => #9
    #4, #9 -> Bonsai.Shaders.Delay(DueTime=PT6S)
    -> FloatProperty(Value=0)
    -> MulticastSubject Stimulus_Speed
    -> FloatProperty(Value=0)
    -> MulticastSubject Stimulus_Opacity
    -> StringProperty(Value=punish_time_elapsed)
    -> Take(Count=1)
    -> WorkflowOutput
#16 -> GroupWorkflow "State = Stop_Trial"
    StringProperty(Value=stop_trial) => #0
    WorkflowInput Source1 => #1
    #0, #1 -> CombineLatest
    -> Equal
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> WorkflowOutput
-> SelectMany Stop_Trial => #36
    SubscribeSubject Lick_Trace
    -> Condition
        WorkflowInput Source1 => #0
        SubscribeSubject Lick_Threshold => #1
        #0, #1 -> CombineLatest
        -> GreaterThanOrEqual
        -> WorkflowOutput
    -> StringProperty(Value=lick) => #2
    WorkflowInput Source1 => #3
    -> FloatProperty(Value=0)
    -> MulticastSubject Stimulus_Speed
    -> FloatProperty(Value=1)
    -> MulticastSubject Stimulus_Opacity => #7
    SubscribeSubject Trial_Delay_Duration => #8
    SubscribeSubject Second_Scale_Factor => #9
    #8, #9 -> CombineLatest
    -> Multiply
    -> PropertyMapping(DueTime) => #12
    #7, #12 -> Bonsai.Shaders.Delay(DueTime=PT2.120732S) => #13
    -> FloatProperty(Value=2)
    -> MulticastSubject Stimulus_Speed => #15
    SubscribeSubject T_Reward_Availdable => #16
    SubscribeSubject Second_Scale_Factor => #17
    #16, #17 -> CombineLatest
    -> Multiply
    -> PropertyMapping(DueTime) => #20
    #15, #20 -> Bonsai.Shaders.Delay(DueTime=PT3S)
    -> StringProperty(Value=correct_stop) => #22
    #2, #22 -> Merge
    -> Delay(DueTime=PT0.2S)
    -> Take(Count=1)
    -> WorkflowOutput
    #3 -> IntProperty(Value=0)
    -> MulticastSubject Static_Onset_Pulse
    #13 -> IntProperty(Value=0)
    -> MulticastSubject Drift_Onset_Pulse
    SubscribeSubject Trial_Stop_Duration => #31
    SubscribeSubject Second_Scale_Factor => #32
    #31, #32 -> CombineLatest
    -> Multiply
    -> PropertyMapping(DueTime) => #35
    #35, #7 -> Bonsai.Shaders.Delay(DueTime=PT0.5938962S)
    -> IntProperty(Value=0)
    -> MulticastSubject Stop_Signal_Pulse
#16 -> GroupWorkflow "State = inter_trial_interval"
    StringProperty(Value=inter_trial_interval) => #0
    WorkflowInput Source1 => #1
    #0, #1 -> CombineLatest
    -> Equal
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> WorkflowOutput
-> SelectMany inter_trial_interval => #38
    WorkflowInput Source1
    -> FloatProperty(Value=0)
    -> MulticastSubject Stimulus_Opacity
    -> FloatProperty(Value=0)
    -> MulticastSubject Stimulus_Speed => #4
    SubscribeSubject Second_Scale_Factor => #5
    SubscribeSubject Inter_Trial_Interval => #6
    #5, #6 -> CombineLatest
    -> Multiply
    -> PropertyMapping(DueTime) => #9
    #4, #9 -> Delay(DueTime=PT1S) => #10
    #4 -> IntProperty(Value=0)
    -> MulticastSubject Trial_End_Pulse => #12
    #10, #12 -> Zip
    -> StringProperty(Value=iti_elapsed)
    -> Delay(DueTime=PT0.02S)
    -> Take(Count=1)
    -> WorkflowOutput
#18, #20, #22, #24, #26, #28, #30, #32, #34, #36, #38 -> Merge
-> MulticastSubject FSM_events
#16 -> MulticastSubject Current_State
